PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = amin_test
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent inner_rect
      fillColor = $[0,1,1]
      lineColor = $None
      pos [set every frame] = $rect_pos
      shape = rectangle
      size [set every frame] = $rect_dims
      startVal [time (s)] = $rect_start
      stopVal [duration (s)] = $rect_dur
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    PolygonComponent outer_rect
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, -0.05)
      shape = rectangle
      size = (0.02, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Set initial vaules for bar
        height = 0.02
        width = 0.02

        x_pos = 0
        y_pos = -0.14

        # timings for bar
        rect_start = 1
        rect_dur = 3

        # Set rate of change (i.e. change between frames)
        height_RoC = 0.002
        yPos_RoC = height_RoC/2

        # Two options for final version:
        # 1. Set duration, in which case the RoCs will be scaled by the score (variable speed/fixed duration)
        # 1. Set rate of change, in which case the duration will be scaled by score (variable duration/ fixed speed)

        # Put variables into lists
        rect_dims = [width, height]
        rect_pos = [x_pos, y_pos]
      Each Frame:
        # Update size and positions on each frame

        # Only change once the bars have appreared
        if inner_rect.status == STARTED:
            # Only update the height/y properties (index 1 for both)
            rect_dims[1] += height_RoC
            rect_pos[1] += yPos_RoC

            # This calculates where the top of the bar is:
            # Position of bar + half the height (as position is always measured from middle)
            bar_top = rect_pos[1] + rect_dims[1]/2

            # If bar goes beyond upper limit of frame then reset it
            if bar_top > 0.05:
                rect_dims[1] = height
                rect_pos[1] = y_pos
Flow
  Routine trial
