PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'condition': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = pirateTrial
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Routines
  Routine studyTrial
    CodeComponent feedback_code
      Code Type = Py
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      Begin Routine:
        #Assuming you have a r_val and and l_val list:

        trial_r_val = r_val[ currentLoop.thisN ]
        trial_l_val = l_val[ currentLoop.thisN ]

        # Generate uniformly distributed random number between 0 and 1
        hint_prob = rand.uniform(size = 1)

        # Generate start times for hint and response window
        hint_start = rand.uniform(3, 7)
        resp_start = hint_start + rand.uniform(3, 7)

        # Set up selection positions
        left_pos = (-0.52, -0.32)
        right_pos = (0.52, -0.32)

        # Pre-generated array way of changing hint correct probability
        #corr_hint_chance = hint_prob[ currentLoop.thisN ]

        # Multiple ifs way of changing hint correct probability
        if currentLoop.thisN < 30:
               corr_hint_chance = cb_hint_chance_1
        elif currentLoop.thisN < 40:
                corr_hint_chance = 0.2
        elif currentLoop.thisN < 50:
                corr_hint_chance = 0.8
        elif currentLoop.thisN < 60:
                corr_hint_chance = 0.2
        elif currentLoop.thisN < 70:
                corr_hint_chance = 0.8
        elif currentLoop.thisN < 120:
                corr_hint_chance = cb_hint_chance_2


        # statement to define correct keys for trial
        if prob_bg[ currentLoop.thisN ]:
            correct_key = 'left'
            # Determine whether the hint will be show on correct or incorrect side
            if hint_prob <= corr_hint_chance:
               imageVariable = imagePath + "Lgreenhint.bmp"
               correct_hint = 1
            else:
                imageVariable = imagePath + "Rbluehint.bmp"
                correct_hint = 0
        else:
            correct_key = 'right'
            if hint_prob <= corr_hint_chance:
                imageVariable = imagePath + "Rbluehint.bmp"
                correct_hint = 1
            else:
                imageVariable = imagePath + "Lgreenhint.bmp"
                correct_hint = 0
      End Routine:
        # This code will run at the end of the routine in which it is placed
        # Useful for making adjustments to the following routine based on responses in the current routine

        # Ensure that the object you are accessing ('key_resp') is the named exactly the same here as in the builder
        if key_resp.keys == 'left': # Start by checking which key was pressed
            select_pos = left_pos
            if key_resp.corr: # Then see if the response was correct
                imageVariable = imagePath + "Lgreenwin.bmp" # If yes then display the treasure
                score_update = trial_l_val # Add the value displayed to the players score
                textFeedback = fdbck_winText # Display positive feedback text
                soundFeedback = "stimuli/coins-drop-1.wav"
            else:
                imageVariable = imagePath + "Lgreenlose.bmp"# Otherwise show the empty chest
                score_update = 0
                textFeedback = fdbck_loseText
                soundFeedback = None
        elif key_resp.keys == 'right':# Same as above but on the other side
            select_pos = right_pos
            if key_resp.corr:
                imageVariable = imagePath + "Rbluewin.bmp" # The predefined image path is added to the file name
                score_update = trial_r_val # Add the value displayed to the players score
                textFeedback = fdbck_winText # Display positive feedback text
                soundFeedback = "stimuli/coins-drop-1.wav"
            else:
                imageVariable = imagePath + "Rbluelose.bmp"
                score_update = 0
                textFeedback = fdbck_loseText
                soundFeedback = None
        # If response is too slow
        else:
            select_pos = (2, 2) # Set the position to be off-screen
            imageVariable = imagePath + "piratetask.bmp"
            score_update = 0
            textFeedback = fdbck_tooslowText

        old_player_score = player_score
        new_player_score = player_score + score_update

        # You might not need this here if you implement the resetting bar in the feedback routine
        # But you will want to transplant some of this code to it
        # (e.g. increasing the player level, subtracting the level limit)
        if player_score > level_limit:
            pirate_level += 1
            leveled_up = True

            player_score -= level_limit

        # Add data to the output
        trials.addData('trial_r_val', trial_r_val)
        trials.addData('trial_l_val', trial_l_val)
        trials.addData('correct_hint', correct_hint)
        trials.addData('prob_bg', prob_bg[ currentLoop.thisN ])


        # Use this to set the image in the following routine
        # Again be sure that the object called is named the same thing as the object in the builder
        image.setImage(imageVariable)
    ImageComponent background
      image = stimuli/piratetask.bmp
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent hint
      image [set every repeat] = $imageVariable
      size = (2, 2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7
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    TextComponent R_text
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $trial_r_val
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    TextComponent L_text
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $trial_l_val
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent fixation
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine feedback
    ImageComponent image
      image [set every repeat] = $imageVariable
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent R_text_2
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $trial_r_val
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    TextComponent L_text_2
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $trial_l_val
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    TextComponent fdbck_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $textFeedback
      units = norm
      wrapWidth = 1
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    PolygonComponent feedbackFrame
      lineColor = $[1.000,1.000,-1.000]
      pos = (0, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.4, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent feedbackFill
      fillColor = $[1.000,1.000,-1.000]
      pos [set every frame] = $rect_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = $rect_dims
      startVal [time (s)] = $rect_start
      stopVal [duration (s)] = $rect_dur
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    CodeComponent bar_code
      Code Type = Auto->JS
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      Begin Experiment:
        player_score = 0
        pirate_level = 0
        level_limit = 460
        level_up = False

        # The maximum height of the bar
        # (should correspond to the height value in the feedbackFrame)
        max_height = 0.6

        # Proportion of the bar's height that corresponds to a single point
        height_for_one_point = max_height/level_limit

        # Set initial values for bar
        height = player_score * height_for_one_point
        width = 0.4

        # This should start as the lower bound of the feedbackFrame
        # i.e. if feedbackFrame height = 0.2 and y position = 0 then
        # y_pos = -0.1 (y position - height/2)
        y_pos = -0.45
        x_pos = 0

        # Timings for bar
        rect_start = 0
        move_start = 2
        rect_dur = 5
        end_idle = 1
        move_dur = rect_dur - (move_start + end_idle)

        # Two options for final version:
        # 1. Set duration, in which case the RoCs will be scaled by the score (variable speed/fixed duration)
        # 2. Set rate of change, in which case the duration will be scaled by score (variable duration/ fixed speed)

        # Currently set up as 1.

        # Put variables into lists
        rect_dims = [width, height]
        rect_pos = [x_pos, y_pos]
      Begin Routine:
        # Calculate the initial and final height based on the score variables
        initial_height = old_player_score * height_for_one_point
        final_height = new_player_score * height_for_one_point

        # Calculate the amount of movement
        total_amount_to_move = final_height - initial_height

        frame_duration = move_dur * 60

        height_RoC = total_amount_to_move/frame_duration
        yPos_RoC = height_RoC/2



        # You might not need this here if you implement the resetting bar in the feedback routine
        # But you will want to transplant some of this code to it
        # (e.g. increasing the player level, subtracting the level limit)
        if player_score > level_limit:
            pirate_level += 1
            leveled_up = True

            player_score -= level_limit
      Each Frame:
        # Only change once the bars have appreared
        if feedbackFill.status == STARTED and t > move_start and t < (rect_dur - end_idle):
            # Only update the height/y properties (index 1 for both)
            rect_dims[1] += height_RoC
            rect_pos[1] += yPos_RoC

            # This calculates where the top of the bar is:
            # Position of bar + half the height (as position is always measured from middle)
            bar_top = rect_pos[1] + rect_dims[1]/2

            # If bar goes beyond upper limit of frame then reset it
            if bar_top > 0.15:
                rect_dims[1] = height
                rect_pos[1] = y_pos

                pirate_level += 1
                player_score -= level_limit

                level_up = True

                #fdbck_text.setText("Congratulations, you are now level %d" % pirate_level)

        if fdbck_text.status == STARTED and t > (rect_dur - end_idle) and level_up:
            fdbck_text.setText("Congratulations, you are now a level %d pirate" % pirate_level)
      End Routine:
        level_up = False
    SoundComponent coin_drop
      disabled = True
      sound [set every repeat] = $soundFeedback
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Intro
    CodeComponent trials_code
      Code Type = Auto->JS
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      Begin Routine:
        trial_list_s = zero*45+one*15 # Blue 75% Green 25%
        trial_list_vi = zero*16+one*4
        trial_list_vii = zero*4+one*16

        rand.shuffle(trial_list_s)
        rand.shuffle(trial_list_vi)
        rand.shuffle(trial_list_vii)
        #overall task probability
        prob_bg = trial_list_s + trial_list_vi + trial_list_vii + trial_list_vi

        num_trial = len(prob_bg)

        r_val = []
        l_val = []

        #create reward values
        for t in range(0,num_trial):
            val = rand.randint(1,100)
            r_val.append(val)
            l_val.append(100-val)
    CodeComponent counterbalancing_code_2
      Code Type = Auto->JS
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      Begin Routine:
        #counterbalancing = int(expInfo['condition'])

        #if counterbalancing % 2:
        #    trial_list_s = zero*8 + one*2
        #    cb_hint_chance = 0.8

        #if counterbalancing //4:
        #    trial_list_s = zero*2 + one*8
        #    cb_hint_chance = 0.8




        #if counterbalancing // 4:
        #    cb_hint_chance_1 = 0.75
        #    cb_hint_chance_2 = 0.15
        #else:
        #    cb_hint_chance_1 = 0.25
        #    cb_hint_chance_2 = 0.85


        #if (condition_value % 4) // 2:
  Routine levelUp
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if not leveled_up:
            continueRoutine=False
      End Routine:
        leveled_up = False
  Routine selection
    ImageComponent background2
      image = stimuli/piratetask.bmp
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent r_text
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $trial_r_val
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    TextComponent l_text
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $trial_l_val
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    PolygonComponent select_frame
      lineColor = yellow
      lineWidth = 8
      pos [set every repeat] = $select_pos
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine famTrial
    CodeComponent famTrial_code
      Code Type = Auto->JS
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      Begin Routine:
        trial_r_val = r_val[ currentLoop.thisN ]
        trial_l_val = l_val[ currentLoop.thisN ]

        # Generate uniformly distributed random number between 0 and 1
        hint_prob = rand.uniform(size = 1)
        select_prob = rand.uniform(size = 1)

        # Generate start times for selection window
        select_start = rand.uniform(3, 7)
        famHint_dur = 1 + select_start
        famRLtext_dur = 2 + select_start

        # Multiple ifs way of changing hint correct probability
        if currentLoop.thisN < 10:
            corr_hint_chance = 0.8


        corr_select_chance = 0.8

        # statement to define correct image for trial
        if fam_prob_bg[ currentLoop.thisN ]:
            # Determine whether the hint will be show on correct or incorrect side
            if hint_prob <= corr_hint_chance:
                imageVariable = imagePath + "Lgreenhint.bmp"
                correct_hint = 1
            else:
                imageVariable = imagePath + "Rbluehint.bmp"
                correct_hint = 0

            # Determine whether the selection will be correct or incorrect
            if select_prob <= corr_select_chance:
                select_pos = left_pos
                imageFeedback = imagePath + "Lgreenwin.bmp" #  then display the treasure
                textFeedback = fdbck_winText # Display positive feedback text
                soundFeedback = "stimuli/coins-drop-1.wav"
            else:
                select_pos = right_pos
                imageFeedback = imagePath + "Rbluelose.bmp"# Otherwise show the empty chest
                textFeedback = fdbck_loseText
                soundFeedback = None
        else:
            if hint_prob <= corr_hint_chance:
                imageVariable = imagePath + "Rbluehint.bmp"
                correct_hint = 1
            else:
                imageVariable = imagePath + "Lgreenhint.bmp"
                correct_hint = 0

            if select_prob <= corr_select_chance:
                select_pos = right_pos
                imageFeedback = imagePath + "Rbluewin.bmp" # The predefined image path is added to the file name
                textFeedback = fdbck_winText # Display positive feedback text
                soundFeedback = "stimuli/coins-drop-1.wav"
            else:
                select_pos = left_pos
                imageFeedback = imagePath + "Lgreenlose.bmp"
                textFeedback = fdbck_loseText
                soundFeedback = None
    ImageComponent famBackground
      image = stimuli/piratetask.bmp
      size = (2, 2)
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 1.0
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    ImageComponent famHint
      image [set every repeat] = $imageVariable
      size = (2, 2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7
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    TextComponent famR_text
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $trial_r_val
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    TextComponent famL_text
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $trial_l_val
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    PolygonComponent famSelect_pos
      lineColor = yellow
      lineWidth = 8
      pos [set every repeat] = $select_pos
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1
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    TextComponent famFixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine ratioCheck
    CodeComponent slider_repeatorprogress_code
      Code Type = Py
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      End Routine:
        # Remember to fix the comparison signs in here (<, >) for each of the different conditions

        if counterbalancing < 5 and counterbalancing % 2:

            if TreasureLocation.getRating() < 5 and HelpfulHint.getRating() > 5:
                fam_repeat.finished = 1

        elif counterbalancing >= 5 and counterbalancing % 2:

            if TreasureLocation.getRating() < 5 and HelpfulHint.getRating() < 5:
                fam_repeat.finished = 1

        elif counterbalancing < 5 and not counterbalancing % 2:

            if TreasureLocation.getRating() > 5 and HelpfulHint.getRating() > 5:
                fam_repeat.finished = 1

        elif counterbalancing >= 5 and not counterbalancing % 2:

            if TreasureLocation.getRating() > 5 and HelpfulHint.getRating() < 5:
                fam_repeat.finished = 1
    RatingScaleComponent TreasureLocation
      forceEndRoutine = False
      high = 10
      labels = All green, All blue
      low = 0
      marker = slider
      markerStart = 5
      pos = 0, -0.4
      scaleDescription = Was the treasure more often in the green pirate’s chest or the blue pirate’s chest? 
      size = 1.0
      startVal [time (s)] = 0
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    RatingScaleComponent HelpfulHint
      forceEndRoutine = False
      high = 10
      labels = Always unhelpful, Always helpful
      low = 0
      marker = slider
      pos = 0, 0.2
      scaleDescription = Was the clue more often helpful or unhelpful to find the treasure? 
      size = 1.0
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct1
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        #Store images and initialise feedback display
        imagePath = "stimuli/"
        imageVariable = None
        textFeedback = None # Need this to initialise the text feedback display
        fdbck_winText = "Well done you chose correctly!"
        fdbck_loseText = "Better luck next time!"
        fdbck_tooslowText = "Oops, you were too slow. Please respond quicker next time."
        soundFeedback = None
        zero = [0]
        one = [1]

        from numpy import random as rand #randomise lists

        # Set up selection positions
        left_pos = (-0.52, -0.32)
        right_pos = (0.52, -0.32)
    TextComponent Instruct_1_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.75
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      text:
        In this game, there are two pirates, a green and a blue one, on different islands. Each pirate puts a flag up to tell you how many coins they have in their treasure chest.
    ImageComponent instruct_1_image
      image = stimuli/piratetask_instruct.bmp
      pos = (0., -0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent counterbalancing_code
      Code Type = Py
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      Begin Experiment:
        counterbalancing = int(expInfo['condition'])

            # Note --> zero = bluewin, one = greenwin

        if counterbalancing == 1:

            # Green or blue weighting in fam trials (cond 1)
            trial_list_s = zero*8 + one*2

            # Correct hint chance for fam trials (cond 1)
            cb_hint_chance = 0.8

            # Hint chance for main trials (cond 1)
            cb_hint_chance_1 = 0.75
            cb_hint_chance_2 = 0.15

        elif counterbalancing == 2:

            # Green or blue weighting in fam trials (cond 2)
            trial_list_s = zero*2 + one*8
            # Correct hint chance for fam trials (cond 1)
            cb_hint_chance = 0.8

            # Hint chance for main trials (cond 1)
            cb_hint_chance_1 = 0.75
            cb_hint_chance_2 = 0.15

        elif counterbalancing == 3:

            # Green or blue weighting in fam trials (cond 1)
            trial_list_s = zero*8 + one*2
            # Correct hint chance for fam trials (cond 1)
            cb_hint_chance = 0.8

            # Hint chance for main trials (cond 2)
            cb_hint_chance_1 = 0.25
            cb_hint_chance_2 = 0.85

        elif counterbalancing == 4:
            # Green or blue weighting in fam trials (cond 2)
            trial_list_s = zero*2 + one*8
            # Correct hint chance for fam trials (cond 1)
            cb_hint_chance = 0.8

            # Hint chance for main trials (cond 2)
            cb_hint_chance_1 = 0.25
            cb_hint_chance_2 = 0.85

        elif counterbalancing == 5:
            # Green or blue weighting in fam trials (cond 1)
            trial_list_s = zero*8 + one*2
            # Correct hint chance for fam trials (cond 2)
            cb_hint_chance = 0.2
            # Hint chance for main trials (cond 1)
            cb_hint_chance_1 = 0.75
            cb_hint_chance_2 = 0.15

        elif counterbalancing == 6:
            # Green or blue weighting in fam trials (cond 2)
            trial_list_s = zero*2 + one*8
            # Correct hint chance for fam trials (cond 2)
            cb_hint_chance = 0.2
            # Hint chance for main trials (cond 1)
            cb_hint_chance_1 = 0.75
            cb_hint_chance_2 = 0.15

        elif counterbalancing == 7:
            # Green or blue weighting in fam trials (cond 1)
            trial_list_s = zero*8 + one*2
            # Correct hint chance for fam trials (cond 2)
            cb_hint_chance = 0.2
            # Hint chance for main trials (cond 2)
            cb_hint_chance_1 = 0.25
            cb_hint_chance_2 = 0.85

        elif counterbalancing == 8:
            # Green or blue weighting in fam trials (cond 2)
            trial_list_s = zero*2 + one*8
            # Correct hint chance for fam trials (cond 2)
            cb_hint_chance = 0.2
            # Hint chance for main trials (cond 2)
            cb_hint_chance_1 = 0.25
            cb_hint_chance_2 = 0.85
    TextComponent spacebar_text
      color = black
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press the Space Bar to Continue 
      units = norm
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  Routine famIntro
    CodeComponent fam_setup
      Code Type = Auto->JS
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      Begin Routine:
        rand.shuffle(trial_list_s)

        #overall familiarisation probability (blue win 80%)
        fam_prob_bg = trial_list_s

        num_trial = len(fam_prob_bg)

        # reward variables
        r_val = []
        l_val = []

        #create reward values
        for t in range(0,num_trial):
            val = rand.randint(1,100)
            r_val.append(val)
            l_val.append(100-val)
  Routine famFeedback
    ImageComponent famImage
      image [set every repeat] = $imageFeedback
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent fam_Rtext_2
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $trial_r_val
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    TextComponent fam_Ltext_2
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $trial_l_val
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    TextComponent famfdbck_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $textFeedback
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    SoundComponent sound_fdbck2
      disabled = True
      sound [set every repeat] = $soundFeedback
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instruct2
    TextComponent instruct_2_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.75
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      text:
        But only one of the pirates is telling the truth! The other pirate is trying to trick you, as they actually have nothing in their treasure chest. It could be the green or the blue pirate who is tricking you.

        To help you along, the computer will give you a clue about where you can find the treasure; one of the treasure chests will glow.
    ImageComponent instruct_2_image
      image = stimuli/hint_instruct.bmp
      pos = (0, -0.3)
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent spacebar_text_2
      color = black
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press the Space Bar to Continue 
      units = norm
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  Routine Instruct5
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.75
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      text:
        You’re going to see the pirates and their chests again now. This time you have to GUESS where the treasure is each time using the clues and your knowledge of the pirates as you go. It might not be the same as you’ve just seen and it might change during the game. If you guess correctly, you will win the coins in the chest.

        Remember, just because a pirate says he’s got a lot of coins in his chest, it doesn’t mean he is telling the truth. also, remember, the clues may be helpful or unhelpful and might change during the game too.

        When you have won a certain amount of coins you get to move on up to the next level.

        If you think the green pirate is telling the truth and has the treasure, press this button . If you think the blue pirate is telling the truth and has the treasure, press this button.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct3
    TextComponent instruct_text_3
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.75
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      text:
        You need to decide whether the clue - the glowing treasure chest - is helpful or unhelpful

        The pirate who is telling the truth will open their chest to show you their coins. Here are examples of both pirates showing their coins.
    ImageComponent instruct_image_3
      image = stimuli/bluewin_instruct.bmp
      pos = (-0.4, -0.3)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent instruct_image_4
      image = stimuli/greenwin_instruct.bmp
      pos = (0.4, -0.3)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent spacebar_text_3
      color = black
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press the Space Bar to Continue 
      units = norm
      wrapWidth = 1.75
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  Routine Instruct4
    TextComponent Instruct_text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.75
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      text:
        But the pirate who is tricking you *might* not always be the same. It *could* change throughout the game.

        Let's watch the pirates now. Let's see who has treasure in their chest and who has an empty chest, and if the clue is helpful or unhelpful.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent spacebar_text_4
      color = black
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press the space bar to begin
      units = norm
      wrapWidth = 1.75
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Flow
  Routine Instruct1
  Routine Instruct2
  Routine Instruct3
  Routine Instruct4
  LoopInitiator fam_repeat loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine famIntro
    LoopInitiator fam_trials loopType="TrialHandler"
      Selected rows = 1
      conditionsFile = famtrialList.xlsx
      loopType = random
      nReps = 10
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      conditions:
        [OrderedDict([('item_n', 1)]),
        OrderedDict([('item_n', 2)]),
        OrderedDict([('item_n', 3)]),
        OrderedDict([('item_n', 4)]),
        OrderedDict([('item_n', 5)]),
        OrderedDict([('item_n', 6)]),
        OrderedDict([('item_n', 7)]),
        OrderedDict([('item_n', 8)]),
        OrderedDict([('item_n', 9)]),
        OrderedDict([('item_n', 10)])]
      Routine famTrial
      Routine famFeedback
    LoopTerminator fam_trials
    Routine ratioCheck
  LoopTerminator fam_repeat
  Routine Instruct5
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item_n', 1)]),
      OrderedDict([('item_n', 2)]),
      OrderedDict([('item_n', 3)]),
      OrderedDict([('item_n', 4)]),
      OrderedDict([('item_n', 5)]),
      OrderedDict([('item_n', 6)]),
      OrderedDict([('item_n', 7)]),
      OrderedDict([('item_n', 8)]),
      OrderedDict([('item_n', 9)]),
      OrderedDict([('item_n', 10)]),
      OrderedDict([('item_n', 11)]),
      OrderedDict([('item_n', 12)]),
      OrderedDict([('item_n', 13)]),
      OrderedDict([('item_n', 14)]),
      OrderedDict([('item_n', 15)]),
      OrderedDict([('item_n', 16)]),
      OrderedDict([('item_n', 17)]),
      OrderedDict([('item_n', 18)]),
      OrderedDict([('item_n', 19)]),
      OrderedDict([('item_n', 20)]),
      OrderedDict([('item_n', 21)]),
      OrderedDict([('item_n', 22)]),
      OrderedDict([('item_n', 23)]),
      OrderedDict([('item_n', 24)]),
      OrderedDict([('item_n', 25)]),
      OrderedDict([('item_n', 26)]),
      OrderedDict([('item_n', 27)]),
      OrderedDict([('item_n', 28)]),
      OrderedDict([('item_n', 29)]),
      OrderedDict([('item_n', 30)]),
      OrderedDict([('item_n', 31)]),
      OrderedDict([('item_n', 32)]),
      OrderedDict([('item_n', 33)]),
      OrderedDict([('item_n', 34)]),
      OrderedDict([('item_n', 35)]),
      OrderedDict([('item_n', 36)]),
      OrderedDict([('item_n', 37)]),
      OrderedDict([('item_n', 38)]),
      OrderedDict([('item_n', 39)]),
      OrderedDict([('item_n', 40)]),
      OrderedDict([('item_n', 41)]),
      OrderedDict([('item_n', 42)]),
      OrderedDict([('item_n', 43)]),
      OrderedDict([('item_n', 44)]),
      OrderedDict([('item_n', 45)]),
      OrderedDict([('item_n', 46)]),
      OrderedDict([('item_n', 47)]),
      OrderedDict([('item_n', 48)]),
      OrderedDict([('item_n', 49)]),
      OrderedDict([('item_n', 50)]),
      OrderedDict([('item_n', 51)]),
      OrderedDict([('item_n', 52)])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
    Routine studyTrial
    Routine selection
    Routine feedback
  LoopTerminator trials
