PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = pirateTrial
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Routines
  Routine studyTrial
    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        r_val = []
        l_val = []

        #create reward values
        for t in range(0,num_trial):
            val = rand.randint(1,101)
            r_val.append(val)
            l_val.append(100-val)

        player_score = 0
        pirate_level = 0
        level_limit = 460
        leveled_up = False
      Begin Routine:
        #Assuming you have a r_val and and l_val list:

        trial_r_val = r_val[ currentLoop.thisN ]
        trial_l_val = l_val[ currentLoop.thisN ]

        # You'll also want to add some code here to tell the program which side is correct based on prob_bg
      End Routine:
        # This code will run at the end of the routine in which it is placed
        # Useful for making adjustments to the following routine based on responses in the current routine

        # Ensure that the object you are accessing ('key_resp') is the named exactly the same here as in the builder
        if key_resp.keys == 'left': # Start by checking which key was pressed
            if key_resp.corr: # Then see if the response was correct
                imageVariable = imagePath + "Lgreenwin.bmp" # If yes then display the treasure
                player_score += trial_l_val # Add the value displayed to the players score
                fdbck_winText # Display positive feedback text
            else:
                imageVariable = imagePath + "Lgreenlose.bmp"# Otherwise show the empty chest
                textFeedback = "Better luck next time!"
        elif key_resp.keys == 'right': # Same as above but on the other side
            if key_resp.corr:
                imageVariable = imagePath + "Rbluewin.bmp" # The predefined image path is added to the file name
                player_score += trial_r_val # Add the value displayed to the players score
                fdbckloseText
            else:
                imageVariable = imagePath + "Rbluelose.bmp"
                fdbck_loseText

        if player_score > level_limit:
            pirate_level += 1
            leveled_up = True

            player_score -= level_limit



        # Use this to set the image in the following routine
        # Again be sure that the object called is named the same thing as the object in the builder
        image.setImage(imageVariable)
    ImageComponent background
      image = stimuli/piratetask.bmp
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent R_text
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_r_val
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    TextComponent L_text
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_l_val
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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  Routine feedback
    ImageComponent image
      image [set every repeat] = $imageVariable
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent fdbck_winText
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = Well done you chose correctly!
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    TextComponent R_text_2
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $trial_r_val
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    TextComponent L_text_2
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $trial_l_val
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    TextComponent fdbck_loseText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Better luck next time!
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  Routine Intro
    CodeComponent setup_code
      Code Type = Py
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      Begin Experiment:
        # Code in here is run at the very beginning of the experiment
        # Put stuff here that you need to run once but doesn't change

        imagePath = "stimuli/" # This establishes where the stimuli are stored
        imageVariable = None # Need this to initialise the feedback image display
        textFeedback = None # Need this to initialise the text feedback display
        pos_fdbck_text = "Well done you chose correctly!"
        neg_fdbck_text = "better luck next time!"

        num_trial = 160 # Number of trials in the experiment
        zero = [0] #create lists
        one = [1]
        trial_list_s = zero*60+one*20
        trial_list_vi = zero*16+one*4
        trial_list_vii = zero*4+one*16

        from numpy import random as rand #randomise lists
        rand.shuffle(trial_list_s)
        rand.shuffle(trial_list_vi)
        rand.shuffle(trial_list_vii)
        #overall task probability
        prob_bg = [(trial_list_s, trial_list_vi, trial_list_vii, trial_list_vi, trial_list_vii)]



        # set up "winning score"
        #r_mult = prob_bg[t]
        #l_mult = 1-prob_bg[t]
        #r_tot = r_val*r_mult
        #l_tot = l_val*l_mult
  Routine levelUp
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if not leveled_up:
            continueRoutine=False
      End Routine:
        leveled_up = False
Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine studyTrial
    Routine feedback
  LoopTerminator trials
