PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = slider_test
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Routines
  Routine trial
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 100
      labels = All Green, All Blue
      low = 0
      marker = slider
      markerStart = 5
      pos = 0, -0.4
      scaleDescription = Was the treasure more often in the green pirate’s chest or the blue pirate’s chest? 
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='slider',
        pos=[0, 0.4],
        low=0,
        high=100,
        labels=['All Green', ' All Blue'],
        scale='Was the treasure more often in the green pirate’s chest or the blue pirate’s chest? ',
        markerStart='5',
        size = 1.0,
        textSize=1.0,
        textFont = 'Helvetica Bold',
        textColor = 'Black',
        markerColor = 'yellow',
        singleClick = False,
        tickMarks = None,
        showAccept=True,
        acceptKeys='return',
        acceptPreText='key, click',
        acceptText='click to accept',
        lineColor='White',
        showValue=False,
        stretch=2.0,
        tickHeight=0,
Flow
  Routine trial
